// read dataset path, number of tiles as commandline arguments
args = getArgument()
args = split(args, " ");

stitch_step = args[0]
datadir = args[1]
dataset = args[2]
channel = args[3]
tiles = args[4]

if (channel=='all') {
	filestem = dataset;
	tif_files = dataset + "_stack*_ch*.tif";
	cfg_file = filestem + "_tileoffsets.conf";
   } else {
	filestem = dataset + "_" + channel;
	tif_files = dataset + "_stack*_" + channel + ".tif";
	cfg_file = dataset + "_tileoffsets_chxx.conf";
   }

xml_file = filestem + ".xml";
xml_path = datadir + File.separator + xml_file;
conf_path = datadir + File.separator + cfg_file;
czi_path = datadir + File.separator + dataset + ".czi";
tif_path = datadir + File.separator + "stacks" + File.separator + tif_files;
h5_stem = datadir + File.separator + filestem;
h5_fused = datadir + File.separator + filestem + "-f0.xml";


if (stitch_step==1) {

    // define dataset
    // creates dataset.h5 and dataset.xml
    run("Define dataset ...",
        " define_dataset=[Automatic Loader (Bioformats based)]" +
        " project_filename=" + xml_file +
        " path=" + tif_path +
        " exclude=10" +
        " pattern_0=Tiles pattern_1=Channels" +
        " modify_voxel_size? voxel_size_x=0.33 voxel_size_y=0.33 voxel_size_z=1.2 voxel_size_unit=µm " +
        " how_to_load_images=[Re-save as multiresolution HDF5]" +
        " dataset_save_path=" + datadir +
        " subsampling_factors=[{ {1,1,1}, {2,2,2}, {4,4,4} }]" +
        " hdf5_chunk_sizes=[{ {16,16,16}, {16,16,16}, {16,16,16} }]" +
        " timepoints_per_partition=1" +
        " setups_per_partition=0" +
        " use_deflate_compression" +
        " export_path=" + h5_stem );

    // load tile positions from file
    // creates additional affine transforms in ViewRegistrations tag of dataset.xml
    run("Load TileConfiguration from File...",
        " browse=" + xml_path +
        " select=" + xml_path +
        " browse=" + conf_path +
        " tileconfiguration=" + conf_path +
        " use_pixel_units" +
        " keep_metadata_rotation");

    }
else if (stitch_step==2) {

    // calculate pairwise shifts
    // creates PairwiseResult entries in StitchingResults tag of dataset.xml
    if (tiles=='dummy') {
        run("Calculate pairwise shifts ...",
            " select=" + xml_path +
            " process_angle=[All angles]" +
            " process_channel=[All channels]" +
            " process_illumination=[All illuminations]" +
            " process_timepoint=[All Timepoints]" +
        	" process_tile=[All Tiles]" +
            " method=[Phase Correlation]" +
        	" how_to_treat_timepoints=[treat individually]" +
        	" how_to_treat_channels=[treat individually]" +
        	" how_to_treat_illuminations=[treat individually]" +
        	" how_to_treat_angles=[treat individually]" +
        	" how_to_treat_tiles=compare" +
            " channels=[use Channel 0]" +
            " downsample_in_x=2" +
            " downsample_in_y=2" +
            " downsample_in_z=1" +
            " subpixel");
        }
    else {
        run("Calculate pairwise shifts ...",
            " select=" + xml_path +
            " process_angle=[All angles]" +
            " process_channel=[All channels]" +
            " process_illumination=[All illuminations]" +
            " process_timepoint=[All Timepoints]" +
        	" process_tile=[Range of tiles (Specify by Name)]" +
        	" process_following_tiles=" + tiles +
            " method=[Phase Correlation]" +
        	" how_to_treat_timepoints=[treat individually]" +
        	" how_to_treat_channels=[treat individually]" +
        	" how_to_treat_illuminations=[treat individually]" +
        	" how_to_treat_angles=[treat individually]" +
        	" how_to_treat_tiles=compare" +
            " channels=[use Channel 0]" +
            " downsample_in_x=2" +
            " downsample_in_y=2" +
            " downsample_in_z=1" +
            " subpixel");
        }

    }
else if (stitch_step==3) {

    // filter shifts with 0.7 corr. threshold
    // removes PairwiseResult entries from StitchingResults tag in dataset.xml
    run("Filter pairwise shifts ...",
        " select=" + xml_path +
        " filter_by_link_quality" +
        " min_r=0.7" +
        " max_r=1 " +
        " max_shift_in_x=0" +
        " max_shift_in_y=0" +
        " max_shift_in_z=0" +
        " max_displacement=0");

    // do global optimization
    // creates additional affine transforms in ViewRegistrations tag of dataset.xml
    run("Optimize globally and apply shifts ...",
        " select=" + xml_path +
        " process_angle=[All angles]" +
        " process_channel=[All channels]" +
        " process_illumination=[All illuminations]" +
        " process_tile=[All tiles]" +
        " process_timepoint=[All Timepoints]" +
        " relative=2.500" +
        " absolute=3.500" +
        " global_optimization_strategy=[Two-Round using Metadata to align unconnected Tiles]" +
        " fix_group_0-0,");

    }
else if (stitch_step==4) {

    // fuse dataset, save as hdf5
    // creates output dataset-f0.h5 and dataset-f0.xml (new:fused_image=[Save as new XML Project (HDF5)]); OR
    // creates output dataset-m0.h5 and dataset-f1.h5 (append: fused_image=[Append to current XML Project (HDF5)])
    run("Fuse dataset ...",
        " select=" + xml_path +
        " process_angle=[All angles]" +
        " process_channel=[All channels]" +
        " process_illumination=[All illuminations]" +
        " process_tile=[All tiles]" +
        " process_timepoint=[All Timepoints]" +
        " bounding_box=[All Views]" +
        " downsampling=1" +
        " pixel_type=[16-bit unsigned integer]" +
        " interpolation=[Linear Interpolation]" +
        " image=Cached" +
        " interest_points_for_non_rigid=[-= Disable Non-Rigid =-]" +
        " blend" +
        " preserve_original" +
        " produce=[Each timepoint & channel]" +
        " fused_image=[Save as new XML Project (HDF5)]" +
        " subsampling_factors=[{ {1,1,1}, {2,2,1}, {4,4,2}, {8,8,4}, {16,16,8} }]" +
        " hdf5_chunk_sizes=[{ {32,32,4}, {16,16,16}, {16,16,16}, {16,16,16}, {16,16,16} }]" +
        " timepoints_per_partition=1" +
        " setups_per_partition=0" +
        " use_deflate_compression" +
        " export_path=" + h5_fused );

    }

// quit after we are finished
eval("script", "System.exit(0);");
